PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'01'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = norm
  Window size (pixels) = [2560, 1440]
  color = black
  expName = stroop
  logging level = warning
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Routines
  Routine trial
    TextComponent word
      color [set every repeat] = $letterColor
      letterHeight = 0.2
      startVal [time (s)] = 0.5
      text [set every repeat] = $text
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    KeyboardComponent resp
      allowedKeys = 'left', 'down', 'right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      letterHeight = 0.1
      startVal [time (s)] = 0
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      text:
        Most pedig az éles feladat következik.

        Emlékeztetőül íme a billentyűk:
        Balra nyíl - piros színű betűk
        Lefelé nyíl - zöld színű betűk
        Jobbra nyíl - kék színű betűk
        (Esc - kilépés)

        Kérjük, nyomjon meg egy gombot a folytatáshoz!
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine instructPractice
    TextComponent instr1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        A következő feladatban az olvasott betűk színét
        kell a lehető leggyorsabban megállapítania.

        A következő gombokkal jelezheti válaszát:
        Balra nyíl - piros színű betűk
        Lefelé nyíl - zöld színű betűk
        Jobbra nyíl - kék színű betűk
        (Esc - kilépés)

        A feladat először egy néhány gyakorlókörrel indul.
        Kérjük, nyomjon meg egy gombot a folytatáshoz!
    KeyboardComponent ready1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      font = arial
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        A kísérlet befejeződött.

        Köszönjük a részvételt!
  Routine feedback
    CodeComponent message
      Code Type = Py
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg="Helyes! Válaszidő=%.3f" %(resp.rt)
        else:
          msg="Helytelen válasz!"
    TextComponent feedback_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine pause
    TextComponent pauseText
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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      text:
        Szünet

        Kérem, várjon!
Flow
  Routine instructPractice
  LoopInitiator practice loopType="TrialHandler"
    Selected rows = 0:5
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'text': 'red', 'congruent': 'cong', 'corrAns': 'left', 'letterColor': 'red'},
      {'text': 'red', 'congruent': 'cong', 'corrAns': 'left', 'letterColor': 'red'},
      {'text': 'red', 'congruent': 'incong', 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'red', 'congruent': 'incong', 'corrAns': 'right', 'letterColor': 'blue'},
      {'text': 'green', 'congruent': 'incong', 'corrAns': 'left', 'letterColor': 'red'},
      {'text': 'green', 'congruent': 'cong', 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'green', 'congruent': 'cong', 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'green', 'congruent': 'incong', 'corrAns': 'right', 'letterColor': 'blue'},
      {'text': 'blue', 'congruent': 'incong', 'corrAns': 'left', 'letterColor': 'red'},
      {'text': 'blue', 'congruent': 'incong', 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'blue', 'congruent': 'cong', 'corrAns': 'right', 'letterColor': 'blue'},
      {'text': 'blue', 'congruent': 'cong', 'corrAns': 'right', 'letterColor': 'blue'}]
    Routine trial
    Routine feedback
  LoopTerminator practice
  Routine instruct
  LoopInitiator block1 loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    endPoints = [1, 2]
    loopType = random
    nReps = 4
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    conditions:
      [{'text': 'red', 'congruent': 'cong', 'corrAns': 'left', 'letterColor': 'red'},
      {'text': 'red', 'congruent': 'cong', 'corrAns': 'left', 'letterColor': 'red'},
      {'text': 'red', 'congruent': 'incong', 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'red', 'congruent': 'incong', 'corrAns': 'right', 'letterColor': 'blue'},
      {'text': 'green', 'congruent': 'incong', 'corrAns': 'left', 'letterColor': 'red'},
      {'text': 'green', 'congruent': 'cong', 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'green', 'congruent': 'cong', 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'green', 'congruent': 'incong', 'corrAns': 'right', 'letterColor': 'blue'},
      {'text': 'blue', 'congruent': 'incong', 'corrAns': 'left', 'letterColor': 'red'},
      {'text': 'blue', 'congruent': 'incong', 'corrAns': 'down', 'letterColor': 'green'},
      {'text': 'blue', 'congruent': 'cong', 'corrAns': 'right', 'letterColor': 'blue'},
      {'text': 'blue', 'congruent': 'cong', 'corrAns': 'right', 'letterColor': 'blue'}]
    Routine trial
  LoopTerminator block1
  Routine pause
  LoopInitiator block2 loopType="TrialHandler"
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = 4
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    conditions:
      [OrderedDict([('text', 'piros'), ('letterColor', 'red'), ('corrAns', 'left'), ('congruent', 'cong')]),
      OrderedDict([('text', 'piros'), ('letterColor', 'red'), ('corrAns', 'left'), ('congruent', 'cong')]),
      OrderedDict([('text', 'piros'), ('letterColor', 'green'), ('corrAns', 'down'), ('congruent', 'incong')]),
      OrderedDict([('text', 'piros'), ('letterColor', 'blue'), ('corrAns', 'right'), ('congruent', 'incong')]),
      OrderedDict([('text', 'zöld'), ('letterColor', 'red'), ('corrAns', 'left'), ('congruent', 'incong')]),
      OrderedDict([('text', 'zöld'), ('letterColor', 'green'), ('corrAns', 'down'), ('congruent', 'cong')]),
      OrderedDict([('text', 'zöld'), ('letterColor', 'green'), ('corrAns', 'down'), ('congruent', 'cong')]),
      OrderedDict([('text', 'zöld'), ('letterColor', 'blue'), ('corrAns', 'right'), ('congruent', 'incong')]),
      OrderedDict([('text', 'kék'), ('letterColor', 'red'), ('corrAns', 'left'), ('congruent', 'incong')]),
      OrderedDict([('text', 'kék'), ('letterColor', 'green'), ('corrAns', 'down'), ('congruent', 'incong')]),
      OrderedDict([('text', 'kék'), ('letterColor', 'blue'), ('corrAns', 'right'), ('congruent', 'cong')]),
      OrderedDict([('text', 'kék'), ('letterColor', 'blue'), ('corrAns', 'right'), ('congruent', 'cong')])]
    Routine trial
  LoopTerminator block2
  Routine thanks
